CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:6
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Default Input Folder sub-folder|Downloads/pipeline_unit_test_images
    Name of the file:file_list.csv
    Load images based on this data?:Yes
    Base image location:Default Input Folder|
    Process just a range of rows?:No
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    Group images by metadata?:Yes
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    Rescale intensities?:Yes

IdentifyPrimaryObjects:[module_num:2|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
    Select the input image:Cy5
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
MeasureObjectIntensity:[module_num:3|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
    Hidden:1
    Select an image to measure:DAPI
    Select objects to measure:IdentifyPrimaryObjects

MeasureImageSkeleton:[module_num:4|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
    Select an image to measure:FITC

MeasureObjectIntensity:[module_num:5|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
    Hidden:1
    Select an image to measure:dsRed
    Select objects to measure:IdentifyPrimaryObjects

ExportToSpreadsheet:[module_num:6|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:Yes
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